# Parameter id = I, constant.
par I=1

# Parameter id = k__1, constant.
par k__1=4.2416

# Parameter id = k__2, constant.
par k__2=5.9816

# Parameter id = k__3, constant.
par k__3=0.1009

# Parameter id = k__4, constant.
par k__4=1.1549

# Parameter id = k__5, constant.
par k__5=1.3618

# Parameter id = k__6, constant.
par k__6=1.4219

# Parameter id = k__7, constant.
par k__7=0.0051

# Parameter id = k__8, constant.
par k__8=0.0972

# Parameter id = k__9, constant.
par k__9=0.0012

# Parameter id = k__10, constant.
par k__10=56.8583

# Parameter id = k__11, constant.
par k__11=0.0111

# Parameter id = k__12, constant.
par k__12=0.0014

# Species id = SimData__1, defined by a rate rule.
init SimData__1=1
dSimData__1/dt=((((k__1 * I) * (1 - SimData__1)) / ((1 - SimData__1) + k__7)) - ((k__2 * SimData__1) / (SimData__1 + k__8)))

# Species id = SimData__2, defined by a rate rule.
init SimData__2=1
dSimData__2/dt=((((k__3 * SimData__1) * (1 - SimData__2)) / ((1 - SimData__2) + k__9)) - ((k__4 * SimData__2) / (SimData__2 + k__10)))

# Species id = SimData__3, defined by a rate rule.
init SimData__3=1
dSimData__3/dt=((((k__5 * SimData__1) * (1 - SimData__3)) / ((1 - SimData__3) + k__11)) - (((k__6 * SimData__2) * SimData__3) / (SimData__3 + k__12)))

done

